PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = FigureTest
  keyboardBackend = ioHub
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Routines
  Routine InterSessInstr
    PolygonComponent ISIBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent InterSessInstrct
      image = ExtinctionInstruction.PNG
      size = [1.8, 1.8]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndBlock
    TextComponent EndTxt
      font = Microsoft YaHei
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 谢谢您的参与！
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  Routine BlockStart
    CodeComponent BlckInitCode
      Code Type = Auto->JS
  Routine Response
    TextComponent RespInstru
      letterHeight = 0.08
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Please Rate the Emotional Valence of the figure just presented
        Very negative = 0;            Very positive = 7
    RatingScaleComponent RespRate
      categoryChoices = 0 1 2 3 4 5 6 7
      forceEndRoutine = True
      high = 7
      low = 0
      pos = 0, -0.4
      scaleDescription = ''Very negative = 0; Very positive = 7''
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine ITIRand
    TextComponent ITIFixation
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine trialPreCond
    PolygonComponent precondBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent imagePreCond
      image [set every repeat] = $PreCondName
      size = [0.5,1]
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
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    CodeComponent EachTrial
      Code Type = Auto->JS
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      Begin Routine:
        if parallelTrigger == True:
           ParaleData = 50  #Faissal
           #ParaleData = int((TrgCol+0.6)*40+20) #Faissal
           #port.setData(ParaleData) #Faissal
           core.wait(0.02)
           #port.setData(0) #Faissal
  Routine trialCond
    PolygonComponent CSBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent CS_image
      image [set every repeat] = $CSName
      size = (0.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent EachTrial_2
      Code Type = Auto->JS
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      Begin Routine:
        if parallelTrigger == True:
        #   ParaleData = 50
           ParaleData = int((TrgCol+0.6)*40+20)
           port.setData(ParaleData)
           core.wait(0.02)
           port.setData(0)
  Routine UCS
    PolygonComponent UCSBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent UCS_image
      image [set every repeat] = $UCSName
      size = (0.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      sound [set every repeat] = $SoundName
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      volume = 0.3
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  Routine trialExt
    PolygonComponent ExtBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent Ext_image
      image [set every repeat] = $ExtName
      size = (0.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent EachTrial_3
      Code Type = Auto->JS
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      Begin Experiment:
        if parallelTrigger == True:
        #   ParaleData = 50
           ParaleData = int((TrgCol+0.6)*40+20)
           port.setData(ParaleData)
           core.wait(0.02)
           port.setData(0)
  Routine ITIradom2
    PolygonComponent BlankBkg2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = random.uniform(0, 2)+6
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  Routine PreCondRating2
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine FearRating
    PolygonComponent Bkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $ratingName
      size = (1.8, 1.8)
      startVal [time (s)] = 0.0
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    SliderComponent Scale
      forceEndRoutine = True
      granularity = 0
      labels = '1', '2', '3', '4', '5', '6', '7', '8', '9', '10'
      letterHeight = 0.05
      pos = (0, -0.6)
      size = (1.2, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent fearRating
      allowedKeys = '1','2','3','4','5','6','7','8','9','10'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ExtInstruction
    PolygonComponent InstrBkg3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent TagFig3
      image = $instructionFolder+'/Slide3.PNG'
      size = (1.8, 1.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        random.seed()
        SetNums2 = [1,2,3]
        Sess2 = 0
  Routine PreCondInst
    PolygonComponent InstrBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent TagFig
      image = $instructionFolder+'/Slide1.PNG'
      size = (1.8, 1.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent InstrKeyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CondInst
    PolygonComponent InstrBkg2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent TagFig2
      image = $instructionFolder+'/Slide2.PNG'
      size = (1.8, 1.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    PolygonComponent BlankBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = random.uniform(0, 2)+8
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  Routine Ins
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        parallelTrigger = False

        isChinese = True

        if isChinese == True:
            instructionFolder = 'Instructions_CN'
        else:
            instructionFolder = 'Instructions_EN'

        #if parallelTrigger == True:
        #    from psychopy import parallel
        #    port = parallel.ParallelPort(address=0x0378)
        #    port.setData(0)

        random.seed()
        SetNums = [1,2,3]
        Sess = 0
  Routine ExtSessStart
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        iSet2 = SetNums2[Sess2]
        ExtinctionFN = 'Extinction'+str(iSet2)+'.xlsx'
        RatingFN = 'Rating'+str(iSet2)+'.xlsx'
        Sess2 = Sess2 + 1
  Routine CondSessStart
    CodeComponent SessInitCode
      Code Type = Auto->JS
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      Begin Routine:
        iSet = SetNums[Sess]
        # Set Condition files here
        PreConditionFN = 'PreCondition'+str(iSet)+'.xlsx'
        #The ConditionFN sheet includes 30 conditions, of whih 24 (80%) include UCS
        ConditionFN = 'Condition'+str(iSet)+'.xlsx'
        RatingFN = 'Rating'+str(iSet)+'.xlsx'
        Sess = Sess + 1
Flow
  Routine Ins
  LoopInitiator Session_Condition loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine CondSessStart
    Routine PreCondInst
    LoopInitiator PreCond loopType="TrialHandler"
      conditionsFile = $PreConditionFN
      loopType = random
      nReps = 1
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      Routine trialPreCond
      Routine ITI
    LoopTerminator PreCond
    LoopInitiator RatingPreCond loopType="TrialHandler"
      conditionsFile = $RatingFN
      loopType = sequential
      nReps = 1
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      Routine FearRating
    LoopTerminator RatingPreCond
    Routine CondInst
    LoopInitiator Cond loopType="TrialHandler"
      conditionsFile = $ConditionFN
      loopType = random
      nReps = 1
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      Routine trialCond
      Routine UCS
      Routine ITI
    LoopTerminator Cond
    LoopInitiator RatingCond loopType="TrialHandler"
      conditionsFile = $RatingFN
      loopType = sequential
      nReps = 1
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      Routine FearRating
    LoopTerminator RatingCond
  LoopTerminator Session_Condition
  Routine ExtInstruction
  LoopInitiator Session_Extinction loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine ExtSessStart
    LoopInitiator Extinction loopType="TrialHandler"
      conditionsFile = $ExtinctionFN
      loopType = random
      nReps = 1
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      Routine trialExt
      Routine ITI
    LoopTerminator Extinction
    LoopInitiator RatingExt loopType="TrialHandler"
      conditionsFile = $RatingFN
      loopType = sequential
      nReps = 1
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      Routine FearRating
    LoopTerminator RatingExt
  LoopTerminator Session_Extinction
  Routine EndBlock
