PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Data filename = 'data/TCET_%s_%s/TCET_%s_%s_%s_Tasklog' %(expInfo['Participant_ID'], current_date, expInfo['Participant_ID'], expInfo['date'], expInfo['Version']) 
  Experiment info = {'Participant_ID': 'S00', 'Version': "['Standard','Short']", 'Language': "['EN','CN']"}
  Full-screen window = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = use prefs
  Window size (pixels) = [1382, 864]
  backgroundFit = fill
  color = black
  expName = TCET
  keyboardBackend = PsychToolbox
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Routines
  Routine InterSessInstr
    PolygonComponent ISIBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent InterSessInstrct
      image = ExtinctionInstruction.PNG
      size = [1.8, 1.8]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndBlock
    PolygonComponent Bkg_Light
      fillColor = 0.8824, 0.6392, 0.4432
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent EndTxtEN
      color = black
      letterHeight = 0.2
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'EN'
      stopVal [duration (s)] = 5
      text [set every repeat] = $EndTextEN
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    TextComponent EndTxtCN
      color = black
      font = PingFang SC
      letterHeight = 0.2
      pos = [-0.3, 0]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'CN'
      stopVal [duration (s)] = 5
      text [set every repeat] = $EndTextCN
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  Routine BlockStart
    CodeComponent BlckInitCode
      Code Type = Auto->JS
  Routine Response
    TextComponent RespInstru
      letterHeight = 0.08
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Please Rate the Emotional Valence of the figure just presented
        Very negative = 0;            Very positive = 7
    RatingScaleComponent RespRate
      categoryChoices = 0 1 2 3 4 5 6 7
      forceEndRoutine = True
      high = 7
      low = 0
      pos = 0, -0.4
      scaleDescription = ''Very negative = 0; Very positive = 7''
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine ITIRand
    TextComponent ITIFixation
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine trialPreCond
    ImageComponent imagePreCond
      image [set every repeat] = $PreCondName
      size = [2, 2]
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
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    CodeComponent EachTrial
      Code Type = Py
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      Begin Routine:
        # If skipPhases is True, end the current routine and break the loop
        if skipPhases:
            continueRoutine = False  # Set continueRoutine to False to end the routine
            PreCond.finished = True  # Set PreCond.finished to True to break the loop

        # If parallelTrigger is True, perform parallel triggering
        if parallelTrigger:
            ParaleData = 50  # Value to be set on the parallel port
            port.setData(ParaleData)  # Set the parallel port data to ParaleData
            if lfpTrigger:  # If lfpTrigger is also True
                lfpCtrlPort.setData(1)  # Set the LFP control parallel port data to 1
            core.wait(0.02)  # Wait for 0.02 seconds
            port.setData(0)  # Set the parallel port data back to 0
            if lfpTrigger:  # If lfpTrigger is True
                lfpCtrlPort.setData(0)  # Set the LFP control parallel port data back to 0
    MouseComponent PreCondTriggMouse
      durationEstim = 6
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startEstim = 0
      startVal [condition] = $PreCondName=="stimuli/Trig.BMP"
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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    KeyboardComponent PreCondTriggKey
      allowedKeys [set every repeat] = 'space'
      durationEstim = 6
      forceEndRoutine = True
      startEstim = 0
      startVal [condition] = $PreCondName=="stimuli/Trig.BMP"
      stopVal [time (s)] = 6
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  Routine trialCond
    ImageComponent CS_image
      image [set every repeat] = $CSName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent EachTrial_2
      Code Type = Py
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      Begin Routine:
        # If skipPhases is True, end the current routine and break the loop
        if skipPhases:
            continueRoutine = False  # Set continueRoutine to False to end the routine
            Cond.finished = True  # Set Cond.finished to True to break the loop

        # If parallelTrigger is True, perform parallel triggering
        if parallelTrigger:
            ParaleData = 50  # Value to be set on the parallel port
            port.setData(ParaleData)  # Set the parallel port data to ParaleData
            if lfpTrigger:  # If lfpTrigger is also True
                lfpCtrlPort.setData(1)  # Set the LFP control parallel port data to 1
            core.wait(0.02)  # Wait for 0.02 seconds
            port.setData(0)  # Set the parallel port data back to 0
            if lfpTrigger:  # If lfpTrigger is True
                lfpCtrlPort.setData(0)  # Set the LFP control parallel port data back to 0
    MouseComponent CondTriggMouse
      durationEstim = 6
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startEstim = 0
      startVal [condition] = $CSName=="stimuli/Trig.BMP"
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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    KeyboardComponent CondTriggKey
      allowedKeys [set every repeat] = 'space'
      durationEstim = 6
      forceEndRoutine = True
      startEstim = 0
      startVal [condition] = $CSName=="stimuli/Trig.BMP"
      stopVal [time (s)] = 6
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  Routine UCS
    PolygonComponent UCSBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent UCS_image
      image [set every repeat] = $UCSName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      sound [set every repeat] = $SoundName
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      volume = 0.3
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  Routine trialExt
    ImageComponent Ext_image
      image [set every repeat] = $ExtName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent EachTrial_3
      Code Type = Py
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      Begin Routine:
        # If skipPhases is True, end the current routine and break the loop
        if skipPhases:
            continueRoutine = False  # Set continueRoutine to False to end the routine
            Ext.finished = True  # Set PreCond.finished to True to break the loop

        # If parallelTrigger is True, perform parallel triggering
        if parallelTrigger:
            ParaleData = 50  # Value to be set on the parallel port
            port.setData(ParaleData)  # Set the parallel port data to ParaleData
            if lfpTrigger:  # If lfpTrigger is also True
                lfpCtrlPort.setData(1)  # Set the LFP control parallel port data to 1
            core.wait(0.02)  # Wait for 0.02 seconds
            port.setData(0)  # Set the parallel port data back to 0
            if lfpTrigger:  # If lfpTrigger is True
                lfpCtrlPort.setData(0)  # Set the LFP control parallel port data back to 0
    MouseComponent ExtTriggMouse
      durationEstim = 6
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startEstim = 0
      startVal [condition] = $ExtName=="stimuli/Trig.BMP"
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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    KeyboardComponent ExtTriggKey
      allowedKeys [set every repeat] = 'space'
      durationEstim = 6
      forceEndRoutine = True
      startEstim = 0
      startVal [condition] = $ExtName=="stimuli/Trig.BMP"
      stopVal [time (s)] = 6
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  Routine ITIradom2
    PolygonComponent BlankBkg2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = random.uniform(0, 2)+6
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  Routine PreCondRating2
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine PreCondInst
    ImageComponent PreCondImage
      image [set every repeat] = $PreCondInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [condition] = $PreCondInstTextImage=="Stimuli/Raw_Trig.BMP"
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    ImageComponent PreCondImageOverview
      image [set every repeat] = $PreCondInstTextImage
      pos = [0,0.05]
      size = [1.5,0.9]
      startVal [condition] = $PreCondInstTextImage=="Stimuli/Raw_3Faces.BMP"
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    TextComponent PreCondInstEN
      letterHeight = 0.1
      pos = [0,0.7]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'EN'
      text [set every repeat] = $PreCondInstTextEN
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    TextComponent PreCondInstCN
      font = PingFang SC
      letterHeight = 0.08
      pos = [-0.3,0.7]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'CN'
      text [set every repeat] = $PreCondInstTextCN
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    KeyboardComponent PreCondRespKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent PreCondMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent PreCondSubmitEN
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [condition] = $expInfo['Language'] == 'EN'
      text = CONTINUE
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    ButtonComponent PreCondSubmitCN
      bold = False
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = PingFang SC
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [condition] = $expInfo['Language'] == 'CN'
      text = 继续
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  Routine CondInst
    ImageComponent CondImage
      image [set every repeat] = $CondInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [condition] = $CondInstTextImage=="Stimuli/Raw_Trig.BMP"
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    ImageComponent CondImageOverview
      image [set every repeat] = $CondInstTextImage
      pos = [0,0.05]
      size = [1.5,0.9]
      startVal [condition] = $CondInstTextImage=="Stimuli/Raw_3Faces.BMP"
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    TextComponent CondInstEN
      letterHeight = 0.1
      pos = [0,0.7]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'EN'
      text [set every repeat] = $CondInstTextEN
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    TextComponent CondInstCN
      font = PingFang SC
      letterHeight = 0.08
      pos = [-0.3,0.7]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'CN'
      text [set every repeat] = $CondInstTextCN
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    KeyboardComponent CondRespKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent CondMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent CondSubmitEN
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [condition] = $expInfo['Language'] == 'EN'
      text = CONTINUE
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    ButtonComponent CondSubmitCN
      bold = False
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = PingFang SC
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [condition] = $expInfo['Language'] == 'CN'
      text = 继续
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  Routine ITI
    PolygonComponent FixCross
      fillColor = white
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.05, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random.uniform(0, 2)+6
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  Routine ExtSessStart
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        iSet2 = SetNums2[Sess2]
        ExtinctionFN = 'Extinction'+str(iSet2)+'.xlsx'
        RatingFN = 'Rating'+str(iSet2)+'.xlsx'
        Sess2 = Sess2 + 1
  Routine CondSessStart
    CodeComponent SessInitCode
      Code Type = Auto->JS
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      Begin Routine:
        iSet = SetNums[Sess]
        # Set Condition files here
        PreConditionFN = 'PreCondition'+str(iSet)+'.xlsx'
        #The ConditionFN sheet includes 30 conditions, of whih 24 (80%) include UCS
        ConditionFN = 'Condition'+str(iSet)+'.xlsx'
        RatingFN = 'Rating'+str(iSet)+'.xlsx'
        Sess = Sess + 1
  Routine Rating
    ImageComponent image
      image [set every repeat] = $CondName
      pos = [0,0.1]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent RatingInstEN
      letterHeight = 0.1
      pos = [0,0.7]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'EN'
      text [set every repeat] = $FearRatingInstTextEN
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    TextComponent RatingInstCN
      font = PingFang SC
      letterHeight = 0.08
      pos = [0,0.7]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'CN'
      text [set every repeat] = $FearRatingInstTextCN
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    SliderComponent Scale
      fillColor = beige
      forceEndRoutine = False
      granularity = 1
      labels = '– Negative', 'Positive +'
      letterHeight = 0.04
      pos = (0, -0.5)
      size = (1.3, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent RatingKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = Scale.rating
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent SubmitEN
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startEstim = 0
      startVal [condition] = Scale.rating and expInfo['Language'] == 'EN'
      text = SUBMIT
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    ButtonComponent SubmitCN
      bold = False
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = PingFang SC
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startEstim = 0
      startVal [condition] = Scale.rating and expInfo['Language'] == 'CN'
      text = 提交
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  Routine ExtInst
    ImageComponent ExtImage
      image [set every repeat] = $ExtInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [condition] = $ExtInstTextImage=="Stimuli/Raw_Trig.BMP"
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    ImageComponent ExtImageOverview
      image [set every repeat] = $ExtInstTextImage
      pos = [0,0.05]
      size = [1.5,0.9]
      startVal [condition] = $ExtInstTextImage=="Stimuli/Raw_3Faces.BMP"
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    TextComponent ExtInstEN
      letterHeight = 0.1
      pos = [0,0.7]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'EN'
      text [set every repeat] = $ExtInstTextEN
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    TextComponent ExtInstCN
      font = PingFang SC
      letterHeight = 0.08
      pos = [-0.3,0.7]
      startEstim = 0
      startVal [condition] = $expInfo['Language'] == 'CN'
      text [set every repeat] = $ExtInstTextCN
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    KeyboardComponent ExtRespKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent ExtMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent ExtSubmitEN
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [condition] = $expInfo['Language'] == 'EN'
      text = CONTINUE
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    ButtonComponent ExtSubmitCN
      bold = False
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = PingFang SC
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [condition] = $expInfo['Language'] == 'CN'
      text = 继续
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  Routine Settings
    CodeComponent Settings_
      Code Type = Py
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      Before Experiment:
        from datetime import datetime
        current_date = datetime.now().strftime("%Y_%m_%d") #Sets current date for foldername
      Begin Experiment:
        import random
        random.seed()  # Seeds the random number generator

        # List of schedule files
        schedule_files = ['schedules/1_PreCondition.xlsx', 'schedules/2_Condition.xlsx', 'schedules/3_Extinction.xlsx']

        # If experiment version is 'Short', modify the filenames in the list
        if expInfo['Version'] == 'Short':
            for i, filename in enumerate(schedule_files):
                schedule_files[i] = filename.replace('.xlsx', '_Short.xlsx')

        # Print the schedule files being used
        print("Schedule files used:", schedule_files)

        skipPhases = False  # Flag to determine if phases should be skipped (only show instructions and ratings)

        parallelTrigger = False  # Flag to determine if parallel triggering is enabled
        lfpTrigger = False  # Flag to determine if LFP parallel triggering (for Jingyu device) is enabled

        # If parallel triggering is enabled
        if parallelTrigger:
            from psychopy import parallel
            port = parallel.ParallelPort(address=0x0378)  # Initialize parallel port
            port.setData(0)  # Set parallel port data to 0

            if lfpTrigger:  # If LFP triggering is also enabled
                lfpCtrlPort = parallel.ParallelPort(address=0x037A)  # Initialize LFP control parallel port
                lfpCtrlPort.setData(0)  # Set LFP control parallel port data to 0
Flow
  Routine Settings
  LoopInitiator PreCondInstText loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = schedules/0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PreCondInstTextEN': 'Please sit comfortably and focus on the screen at all times.', 'PreCondInstTextCN': '请放松地坐在椅子上，并始终注视屏幕。', 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'End of phase. Take a short break until you are instructed to continue.', 'CondInstTextCN': '本阶段结束。请短暂休息一下，等待开启下一阶段的指令。', 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'End of phase. Take a short break until you are instructed to continue.', 'ExtInstTextCN': '本阶段结束。请短暂休息一下，等待开启下一阶段的指令。', 'ExtInstTextImage': 'Stimuli/Raw_black.BMP', 'EndTextEN': 'The task is over, thank you for your p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,
      {'PreCondInstTextEN': 'You will see different faces appear on the screen. Please carefully observe them.', 'PreCondInstTextCN': '你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'Again, faces will appear on the screen, of which some may feel unpleasant. Plase continue to look at the screen.', 'CondInstTextCN': '同样，你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'Again, you will see different faces appear on the screen. Please carefully observe them.', 'ExtInstTextCN': '同样，你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'ExtInstText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,
      {'PreCondInstTextEN': 'When you see the face below, please left-click the mouse as fast as you can', 'PreCondInstTextCN': '当你看到下面的面孔时，以最快的速度按下空格。', 'PreCondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'CondInstTextEN': 'When you see the face below, please left-click the mouse as fast as you can', 'CondInstTextCN': '当你看到下面的面孔时，以最快的速度按下空格。', 'CondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'ExtInstTextEN': 'When you see the face below, please left-click the mouse as fast as you can', 'ExtInstTextCN': '当你看到下面的面孔时，以最快的速度按下空格。', 'ExtInstTextImage': 'Stimuli/Raw_Trig.BMP', 'EndTextEN': None, 'EndTextCN': Non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,
      {'PreCondInstTextEN': 'When you see any of the faces below, do nothing.', 'PreCondInstTextCN': '当你看到下面的任何一张面孔时，什么都不要做。', 'PreCondInstTextImage': 'Stimuli/Raw_3Faces.BMP', 'CondInstTextEN': 'When you see any of the faces below, do nothing.', 'CondInstTextCN': '当你看到下面的任何一张面孔时，什么都不要做。', 'CondInstTextImage': 'Stimuli/Raw_3Faces.BMP', 'ExtInstTextEN': 'When you see any of the faces below, do nothing.', 'ExtInstTextCN': '当你看到下面的任何一张面孔时，什么都不要做。', 'ExtInstTextImage': 'Stimuli/Raw_3Faces.BMP', 'EndTextEN': None, 'EndTextCN': None}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
    Routine PreCondInst
  LoopTerminator PreCondInstText
  LoopInitiator PreCond loopType="TrialHandler"
    conditionsFile = $schedule_files[0]
    loopType = random
    nReps = 1
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    conditions:
      [{'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6}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
    Routine trialPreCond
    Routine ITI
  LoopTerminator PreCond
  LoopInitiator RatingPreCond loopType="TrialHandler"
    conditionsFile = schedules/4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CondName': 'Stimuli/Raw_Neg.BMP', 'TrgCol': 0, 'FearRatingInstTextEN': 'How do you feel about this face?', 'FearRatingInstTextCN': "你对这个面孔有什么感觉?（'– '表示负面恐怖的, '+'表示积极快乐的）"},
      {'CondName': 'Stimuli/Raw_Neu.BMP', 'TrgCol': 0.4, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None},
      {'CondName': 'Stimuli/Raw_Pos.BMP', 'TrgCol': 0.6, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None},
      {'CondName': 'Stimuli/Raw_Trig.BMP', 'TrgCol': 0.9, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None}]
    Routine Rating
  LoopTerminator RatingPreCond
  LoopInitiator CondInstText loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = schedules/0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine CondInst
  LoopTerminator CondInstText
  LoopInitiator Cond loopType="TrialHandler"
    conditionsFile = $schedule_files[1]
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2}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
    Routine trialCond
    Routine UCS
    Routine ITI
  LoopTerminator Cond
  LoopInitiator RatingCond loopType="TrialHandler"
    conditionsFile = schedules/4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CondName': 'Stimuli/Raw_Neg.BMP', 'TrgCol': 0, 'FearRatingInstTextEN': 'How do you feel about this face?', 'FearRatingInstTextCN': "你对这个面孔有什么感觉?（'– '表示负面恐怖的, '+'表示积极快乐的）"},
      {'CondName': 'Stimuli/Raw_Neu.BMP', 'TrgCol': 0.4, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None},
      {'CondName': 'Stimuli/Raw_Pos.BMP', 'TrgCol': 0.6, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None},
      {'CondName': 'Stimuli/Raw_Trig.BMP', 'TrgCol': 0.9, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None}]
    Routine Rating
  LoopTerminator RatingCond
  LoopInitiator ExtInstText loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = schedules/0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine ExtInst
  LoopTerminator ExtInstText
  LoopInitiator Ext loopType="TrialHandler"
    conditionsFile = $schedule_files[2]
    loopType = random
    nReps = 1
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    conditions:
      [{'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'ExtName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'ExtName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6}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
    Routine trialExt
    Routine ITI
  LoopTerminator Ext
  LoopInitiator RatingExt loopType="TrialHandler"
    conditionsFile = schedules/4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Rating
  LoopTerminator RatingExt
  LoopInitiator EndText loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = schedules/0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine EndBlock
  LoopTerminator EndText
