PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = 'data/%s/%s-%s' %(expInfo['Participant_ID'], expInfo['Participant_ID'], expInfo['date']) 
  Experiment info = {'Participant_ID': 'P00'}
  Full-screen window = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = TCET
  keyboardBackend = PsychToolbox
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Routines
  Routine InterSessInstr
    PolygonComponent ISIBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent InterSessInstrct
      image = ExtinctionInstruction.PNG
      size = [1.8, 1.8]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndBlock
    PolygonComponent Bkg_Light
      fillColor = 0.8824, 0.6392, 0.4432
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent EndTxtEN
      color = black
      font = Helvetica
      letterHeight = 0.2
      startEstim = 0
      startVal [condition] = $isChinese==False
      stopVal [duration (s)] = 5
      text [set every repeat] = $EndTextEN
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    TextComponent EndTxtCN
      color = black
      font = PingFang SC
      letterHeight = 0.2
      pos = [-0.1, 0]
      startEstim = 0
      startVal [condition] = $isChinese==True
      stopVal [duration (s)] = 5
      text [set every repeat] = $EndTextCN
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  Routine BlockStart
    CodeComponent BlckInitCode
      Code Type = Auto->JS
  Routine Response
    TextComponent RespInstru
      letterHeight = 0.08
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Please Rate the Emotional Valence of the figure just presented
        Very negative = 0;            Very positive = 7
    RatingScaleComponent RespRate
      categoryChoices = 0 1 2 3 4 5 6 7
      forceEndRoutine = True
      high = 7
      low = 0
      pos = 0, -0.4
      scaleDescription = ''Very negative = 0; Very positive = 7''
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine ITIRand
    TextComponent ITIFixation
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine trialPreCond
    PolygonComponent precondBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent imagePreCond
      image [set every repeat] = $PreCondName
      size = [2, 2]
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
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    MouseComponent PreCond_Mouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent EachTrial
      Code Type = Auto->JS
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      Begin Routine:
        if parallelTrigger == True:
           ParaleData = 50  #Faissal
           #ParaleData = int((TrgCol+0.6)*40+20) #Faissal
           port.setData(ParaleData) #Faissal
           core.wait(0.02)
           port.setData(0) #Faissal
    KeyboardComponent PreCondKey
      allowedKeys [set every repeat] = 'space'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = $PreCondName=="Stimuli/Trig.BMP"
      store = first key
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  Routine trialCond
    PolygonComponent CSBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent CS_image
      image [set every repeat] = $CSName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    MouseComponent Cond_Mouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent EachTrial_2
      Code Type = Auto->JS
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      Begin Routine:
        if parallelTrigger == True:
           ParaleData = 50
           #ParaleData = int((TrgCol+0.6)*40+20)
           port.setData(ParaleData)
           core.wait(0.02)
           port.setData(0)
  Routine UCS
    PolygonComponent UCSBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent UCS_image
      image [set every repeat] = $UCSName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      sound [set every repeat] = $SoundName
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      volume = 0.3
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  Routine trialExt
    PolygonComponent ExtBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent Ext_image
      image [set every repeat] = $ExtName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    MouseComponent PreCond_Mouse_2
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent EachTrial_3
      Code Type = Auto->JS
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      Begin Experiment:
        if parallelTrigger == True:
           ParaleData = 50
           #ParaleData = int((TrgCol+0.6)*40+20)
           port.setData(ParaleData)
           core.wait(0.02)
           port.setData(0)
  Routine ITIradom2
    PolygonComponent BlankBkg2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = random.uniform(0, 2)+6
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  Routine PreCondRating2
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine PreCondInst
    PolygonComponent InstrBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent PreCondImage
      image [set every repeat] = $PreCondInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent PreCondInstEN
      font = Helvetica
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==False
      text [set every repeat] = $PreCondInstTextEN
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    TextComponent PreCondInstCN
      font = PingFang SC
      letterHeight = 0.1
      pos = (-0.2,0.7)
      startVal [condition] = $isChinese==True
      text [set every repeat] = $PreCondInstTextCN
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    KeyboardComponent InstrKeyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent PreCondMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent PreCondSubmit
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = Helvetica
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [time (s)] = 0
      text = CONTINUE
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  Routine CondInst
    PolygonComponent InstrBkg2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent CondImage
      image [set every repeat] = $CondInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent CondInstEN
      font = Helvetica
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==False
      text [set every repeat] = $CondInstTextEN
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    TextComponent CondInstCN
      font = PingFang SC
      letterHeight = 0.1
      pos = [-0.2,0.7]
      startVal [condition] = $isChinese==True
      text [set every repeat] = $CondInstTextCN
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent CondMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent CondSubmit
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = Helvetica
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [time (s)] = 0
      text = CONTINUE
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  Routine ITI
    PolygonComponent BlankBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = random.uniform(0, 2)+6
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  Routine ExtSessStart
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        iSet2 = SetNums2[Sess2]
        ExtinctionFN = 'Extinction'+str(iSet2)+'.xlsx'
        RatingFN = 'Rating'+str(iSet2)+'.xlsx'
        Sess2 = Sess2 + 1
  Routine CondSessStart
    CodeComponent SessInitCode
      Code Type = Auto->JS
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      Begin Routine:
        iSet = SetNums[Sess]
        # Set Condition files here
        PreConditionFN = 'PreCondition'+str(iSet)+'.xlsx'
        #The ConditionFN sheet includes 30 conditions, of whih 24 (80%) include UCS
        ConditionFN = 'Condition'+str(iSet)+'.xlsx'
        RatingFN = 'Rating'+str(iSet)+'.xlsx'
        Sess = Sess + 1
  Routine Rating
    PolygonComponent Bkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $CondName
      pos = [0,0.1]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent RatingInstEN
      font = Helvetica
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==False
      text [set every repeat] = $FearRatingInstTextEN
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    TextComponent RatingInstCN
      font = PingFang SC
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==True
      text [set every repeat] = $FearRatingInstTextCN
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    SliderComponent Scale
      fillColor = beige
      font = Helvetiva
      forceEndRoutine = False
      granularity = 1
      labels = '– Negative', 'Positive +',
      letterHeight = 0.07
      pos = (0, -0.5)
      size = (1.2, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent Submit
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = Helvetica
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [condition] = Scale.rating
      text = SUBMIT
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  Routine ExtInst
    PolygonComponent InstrBkg3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent ExtImage
      image [set every repeat] = $ExtInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent ExtInstEN
      font = Helvetica
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==False
      text [set every repeat] = $ExtInstTextEN
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    TextComponent ExtInstCN
      font = PingFang SC
      letterHeight = 0.1
      pos = [-0.2,0.7]
      startVal [condition] = $isChinese==True
      text [set every repeat] = $ExtInstTextCN
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent ExtMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent ExtSubmit
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = Helvetica
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [time (s)] = 0
      text = CONTINUE
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  Routine Init
    CodeComponent Properties
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        parallelTrigger = False

        isChinese = False

        if parallelTrigger == True:
            from psychopy import parallel
            port = parallel.ParallelPort(address=0x0378)
            port.setData(0)

        random.seed()
        SetNums = [1,2,3]
        Sess = 0
Flow
  Routine Init
  LoopInitiator PreCondInstText loopType="TrialHandler"
    conditionsFile = 0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PreCondInstTextEN': 'Please sit comfortably and focus on the screen at all times.', 'PreCondInstTextCN': '请舒适地坐着，并始终专注于屏幕。', 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'Again, faces will appear on the screen, of which some may feel unpleasant. Plase continue to look at the screen.', 'CondInstTextCN': '同样，屏幕上会出现一些面孔，其中一些可能会让人感到不愉快。请继续看屏幕。', 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'Before we continue, feel free to take a break of 5-10 minutes,', 'ExtInstTextCN': '在我们继续之前，请放心地休息5-10分钟、', 'ExtInstTextImage': 'Stimuli/Raw_black.BMP', 'EndTextEN': 'T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,
      {'PreCondInstTextEN': 'You will see different faces appear on the screen. Please carefully observe them.', 'PreCondInstTextCN': '你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'When you see the face below, please press SPACE as fast as you can', 'CondInstTextCN': None, 'CondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'ExtInstTextEN': 'Again, you will see different faces appear on the screen. Please carefully observe them.', 'ExtInstTextCN': None, 'ExtInstTextImage': 'Stimuli/Raw_black.BMP', 'EndTextEN': None, 'EndTextCN': None},
      {'PreCondInstTextEN': 'When you see the face below, please press SPACE as fast as you can', 'PreCondInstTextCN': None, 'PreCondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'CondInstTextEN': 'Once you are ready, press CONTINUE', 'CondInstTextCN': None, 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'When you see the face below, please press SPACE as fast as you can', 'ExtInstTextCN': None, 'ExtInstTextImage': 'Stimuli/Raw_Trig.BMP', 'EndTextEN': None, 'EndTextCN': None},
      {'PreCondInstTextEN': 'Once you are ready, press CONTINUE', 'PreCondInstTextCN': None, 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': None, 'CondInstTextCN': None, 'CondInstTextImage': None, 'ExtInstTextEN': 'Once you are ready, press CONTINUE', 'ExtInstTextCN': None, 'ExtInstTextImage': 'Stimuli/Raw_black.BMP', 'EndTextEN': None, 'EndTextCN': None}]
    Routine PreCondInst
  LoopTerminator PreCondInstText
  LoopInitiator PreCond loopType="TrialHandler"
    conditionsFile = 1_PreCondition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4}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
    Routine trialPreCond
    Routine ITI
  LoopTerminator PreCond
  LoopInitiator RatingPreCond loopType="TrialHandler"
    conditionsFile = 4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ratingName_EN': 'Instructions_EN/ratingCS+1.png', 'ratingName_CN': 'Instructions_CN/ratingCS+1.png', 'CondName': 'Stimuli/CS+1.BMP', 'TrgCol': -0.1},
      {'ratingName_EN': 'Instructions_EN/ratingCS+3.png', 'ratingName_CN': 'Instructions_CN/ratingCS+3.png', 'CondName': 'Stimuli/CS+3.BMP', 'TrgCol': 0.4},
      {'ratingName_EN': 'Instructions_EN/ratingCS+4.png', 'ratingName_CN': 'Instructions_CN/ratingCS+4.png', 'CondName': 'Stimuli/CS+4.BMP', 'TrgCol': -0.1}]
    Routine Rating
  LoopTerminator RatingPreCond
  LoopInitiator CondInstText loopType="TrialHandler"
    conditionsFile = 0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine CondInst
  LoopTerminator CondInstText
  LoopInitiator Cond loopType="TrialHandler"
    conditionsFile = 2_Condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/black.PNG', 'SoundName': 'Sound/silent.wav', 'TrgCol': -0.1},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/black.PNG', 'SoundName': 'Sound/silent.wav', 'TrgCol': -0.1},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/black.PNG', 'SoundName': 'Sound/silent.wav', 'TrgCol': -0.1},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/black.PNG', 'SoundName': 'Sound/silent.wav', 'TrgCol': -0.1},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/black.PNG', 'SoundName': 'Sound/silent.wav', 'TrgCol': -0.1},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/black.PNG', 'SoundName': 'Sound/silent.wav', 'TrgCol': -0.1},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.9},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.9},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.9},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.9},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.9},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.9},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.9}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
    Routine trialCond
    Routine UCS
    Routine ITI
  LoopTerminator Cond
  LoopInitiator RatingCond loopType="TrialHandler"
    conditionsFile = 4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ratingName_EN': 'Instructions_EN/ratingCS+1.png', 'ratingName_CN': 'Instructions_CN/ratingCS+1.png', 'CondName': 'Stimuli/CS+1.BMP', 'TrgCol': -0.1},
      {'ratingName_EN': 'Instructions_EN/ratingCS+3.png', 'ratingName_CN': 'Instructions_CN/ratingCS+3.png', 'CondName': 'Stimuli/CS+3.BMP', 'TrgCol': 0.4},
      {'ratingName_EN': 'Instructions_EN/ratingCS+4.png', 'ratingName_CN': 'Instructions_CN/ratingCS+4.png', 'CondName': 'Stimuli/CS+4.BMP', 'TrgCol': -0.1}]
    Routine Rating
  LoopTerminator RatingCond
  LoopInitiator ExtInstText loopType="TrialHandler"
    conditionsFile = 0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PreCondInstTextEN': 'Please sit comfortably and focus on the screen at all times.', 'PreCondInstTextCN': '请舒适地坐着，并始终专注于屏幕。', 'PreCondInstTextImage': None, 'CondInstTextEN': 'Again, faces will appear on the screen, of which some may feel unpleasant. Plase continue to look at the screen.', 'CondInstTextCN': '同样，屏幕上会出现一些面孔，其中一些可能会让人感到不愉快。请继续看屏幕。', 'CondInstTextImage': None, 'ExtInstTextEN': 'Before we continue, feel free to take a break of 5-10 minutes,', 'ExtInstTextCN': '在我们继续之前，请放心地休息5-10分钟、', 'ExtInstTextImage': None, 'EndTextEN': 'Thank you!', 'EndTextCN': '测试结束，请叫医生'},
      {'PreCondInstTextEN': 'You will see different faces appear on the screen. Please carefully observe them.', 'PreCondInstTextCN': '你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'PreCondInstTextImage': None, 'CondInstTextEN': 'When you see the face below, please press SPACE as fast as you can', 'CondInstTextCN': None, 'CondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'ExtInstTextEN': 'Again, you will see different faces appear on the screen. Please carefully observe them.', 'ExtInstTextCN': None, 'ExtInstTextImage': None, 'EndTextEN': None, 'EndTextCN': None},
      {'PreCondInstTextEN': 'When you see the face below, please press SPACE as fast as you can', 'PreCondInstTextCN': None, 'PreCondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'CondInstTextEN': 'Once you are ready, press CONTINUE', 'CondInstTextCN': None, 'CondInstTextImage': None, 'ExtInstTextEN': 'When you see the face below, please press SPACE as fast as you can', 'ExtInstTextCN': None, 'ExtInstTextImage': 'Stimuli/Raw_Trig.BMP', 'EndTextEN': None, 'EndTextCN': None},
      {'PreCondInstTextEN': 'Once you are ready, press CONTINUE', 'PreCondInstTextCN': None, 'PreCondInstTextImage': None, 'CondInstTextEN': None, 'CondInstTextCN': None, 'CondInstTextImage': None, 'ExtInstTextEN': 'Once you are ready, press CONTINUE', 'ExtInstTextCN': None, 'ExtInstTextImage': None, 'EndTextEN': None, 'EndTextCN': None}]
    Routine ExtInst
  LoopTerminator ExtInstText
  LoopInitiator Extinction loopType="TrialHandler"
    conditionsFile = 3_Extinction.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': -0.1},
      {'ExtName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Pos.BMP', 'TrgCol': 0.4}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
    Routine trialExt
    Routine ITI
  LoopTerminator Extinction
  LoopInitiator RatingExt loopType="TrialHandler"
    conditionsFile = 4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Rating
  LoopTerminator RatingExt
  LoopInitiator EndText loopType="TrialHandler"
    conditionsFile = 0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PreCondInstTextEN': 'Please sit comfortably and focus on the screen at all times.', 'PreCondInstTextCN': '请舒适地坐着，并始终专注于屏幕。', 'CondInstTextEN': 'Again, faces will appear on the screen, of which some may feel unpleasant. Plase continue to look at the screen.', 'CondInstTextCN': '同样，屏幕上会出现一些面孔，其中一些可能会让人感到不愉快。请继续看屏幕。', 'ExtInstTextEN': 'Before we continue, feel free to take a break of 5-10 minutes,', 'ExtInstTextCN': '在我们继续之前，请放心地休息5-10分钟、', 'EndTextEN': 'Thank you!', 'EndTextCN': '测试结束，请叫医生'},
      {'PreCondInstTextEN': 'You will see different faces appear on the screen. Please carefully observe them.', 'PreCondInstTextCN': '你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'CondInstTextEN': None, 'CondInstTextCN': None, 'ExtInstTextEN': None, 'ExtInstTextCN': None, 'EndTextEN': None, 'EndTextCN': None},
      {'PreCondInstTextEN': None, 'PreCondInstTextCN': None, 'CondInstTextEN': None, 'CondInstTextCN': None, 'ExtInstTextEN': None, 'ExtInstTextCN': None, 'EndTextEN': None, 'EndTextCN': None}]
    Routine EndBlock
  LoopTerminator EndText
